# 1 "/opt/topspin3.2/exp/stan/nmr/lists/pp/zg"
;zg
;avance-version (12/01/11)
;1D sequence
;
;$CLASS=HighRes
;$DIM=1D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


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"acqt0=-p1*2/3.1416"


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define delay MCWRK
define delay MCREST
"MCREST = 30m - 30m"
"MCWRK = 0.333333*30m"

    dccorr
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1 ze
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2 MCWRK  * 2
LBLF0, MCWRK
  MCREST
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  d1
  p1 ph1
  go=2 ph31
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  MCWRK wr #0
  MCWRK zd
  lo to LBLF0 times td0

  MCWRK
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exit
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ph1=0 2 2 0 1 3 3 1
ph31=0 2 2 0 1 3 3 1


;pl1 : f1 channel - power level for pulse (default)
;p1 : f1 channel -  high power pulse
;d1 : relaxation delay; 1-5 * T1
;ns: 1 * n, total number of scans: NS * TD0
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;$Id: zg,v 1.10.8.1 2012/01/31 17:56:41 ber Exp $
