#!/bin/csh

date
nmrPipe   -in  test.fid                         	\
| nmrPipe -fn SP -off 0.45 -end 0.99 -pow 1 -c 0.5	\
| nmrPipe -fn EM -lb 40					\
| nmrPipe -fn ZF -auto					\
| nmrPipe -fn FT -auto					\
| nmrPipe -fn PS -p0 64 -p1 0.0  -verb  -di     	\
| nmrPipe -fn POLY -auto -ord 0	                	\
| nmrPipe -fn TP                                	\
| nmrPipe -fn SP -off 0.45 -end 0.99 -pow 2 -c 0.5       \
| nmrPipe -fn EM -lb 40					\
| nmrPipe -fn ZF -auto	                        	\
| nmrPipe -fn FT -alt                          	\
| nmrPipe -fn PS -p0 4 -p1 0.0 -verb -di    		\
#| nmrPipe -fn POLY -auto -ord 0	                	\
-out test.DAT -ov
